var frequency = 440.0
var duration = 1s
var ended = false

tone sound (
    frequency = frequency
    duration = duration
    ended = ended
    )


%define play_and_wait ()
    ended = false
    play_sound (sound)
    wait (duration - 100ms)
    assert (not ended)
    wait_for_condition (
        condition = ended
        timeout = 300ms
        )
    wait (1s)
%end


protocol {
    report ('Playing with initial frequency and duration')
    play_and_wait ()

    report ('Playing with different frequency and duration')
    frequency = 220.0
    duration = 3s
    play_and_wait ()

    report ('Playing with no duration')
    duration = 0
    ended = false
    play_sound (sound)
    wait (4s)
    assert (not ended)
    stop_sound (sound)
    assert (not ended)
    wait (1s)

    report ('Testing invalid values for frequency and duration')
    frequency = 0.0
    duration = 1000000s
    play_sound (sound)
    frequency = -0.1
    play_sound (sound)
    frequency = 0.1
    play_sound (sound)
}
